# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Keysight DSOX1000 Oscilloscope

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Keysight_DSOX1000Series_Scope

# default interface and address
interface: VISA


[Model and options]
# The option section allow instruments with different options to use the same driver

# List of models supported by this driver
model_str_1: 1102A
model_str_2: 1204A

# Check instrument model id at startup (True or False). Default is False
check_model: False


# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: True

term_char: LF

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 10

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False 

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: :SYST:ERR?

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: *CLS;:WAV:FORM WORD;:WAV:BYT LSBF;:WAV:UNS 1

# Final commands sent to the instrument when closing the driver
final: 

# Define quantities in sections. This list is a selection of allowed keywords,
# see the manual for a full list of options
#   datatype:      The datatype should be one of DOUBLE, BOOLEAN, COMBO,
#                  STRING, COMPLEX, VECTOR, VECTOR_COMPLEX, PATH or BUTTON.
#   unit:          Quantity unit
#   set_cmd:       Command used to send data to the instrument. Put <*> where the value should appear.
#   get_cmd:       Command used to get the data from the instrument. Default is set_cmd?
#   def_value:     Default value
#   low_lim:       Lowest allowable value.  Defaults to -INF
#   high_lim:      Highest allowable values.  Defaults to +INF
#   combo_def_1:   First option in a pull-down combo box. Only used when datatype=COMBO
#   combo_def_2:   Second option in a pull-down combo box. Only used when datatype=COMBO
#   ...
#   combo_def_n:   nth option in a pull-down combo box. Only used when datatype=COMBO
#   state_quant:   Quantity that determines this control's visibility
#   state_value_1: Value of "state_quant" for which the control is visible
#   state_value_2: Value of "state_quant" for which the control is visible
#   ...
#   state_value_n: Value of "state_quant" for which the control is visible
#   permission:    Sets read/writability, options are BOTH, READ, WRITE or NONE. Default is BOTH 
#   group:         Name of the group where the control belongs.
#   section:       Name of the section where the control belongs.


[Ch1 - Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ

[Ch2 - Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ

[Ch3 - Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ

# [Ch4 - Data]
# unit: V
# x_name: Time
# x_unit: s
# datatype: VECTOR
# permission: READ

[Time range]
datatype: DOUBLE
def_value: 1.0E-5
unit: s
set_cmd: :TIM:RANG
group: Timebase

[Time reference]
datatype: COMBO
def_value: Center
combo_def_1: Left
combo_def_2: Center
combo_def_3: Right
cmd_def_1: LEFT
cmd_def_2: CENT
cmd_def_3: RIGH
set_cmd: :TIM:REF
group: Timebase

[Time delay]
datatype: DOUBLE
def_value: 0.0
unit: s
set_cmd: :TIM:POS
group: Timebase

[Number of points]
datatype: DOUBLE
def_value: 1000
set_cmd: :WAV:POIN
group: Timebase


[Trig source]
datatype: COMBO
def_value: Channel 1
combo_def_1: Channel 1
combo_def_2: Channel 2
# combo_def_3: Channel 3
# combo_def_4: Channel 4
combo_def_5: External
combo_def_6: Line
cmd_def_1: CHAN1
cmd_def_2: CHAN2
# cmd_def_3: CHAN3
# cmd_def_4: CHAN4
cmd_def_5: EXT
cmd_def_6: LINE
set_cmd: :TRIG:SOUR
group: Trigger
 
[Trig coupling]
datatype: COMBO
def_value: DC
combo_def_1: DC
combo_def_2: AC
combo_def_3: LF Reject
cmd_def_1: DC
cmd_def_2: AC
cmd_def_3: LFR
set_cmd: :TRIG:COUP
group: Trigger

[Trig slope]
datatype: COMBO
def_value: Positive
combo_def_1: Positive
combo_def_2: Negative
combo_def_3: Either
combo_def_4: Alternate
cmd_def_1: POS 
cmd_def_2: NEG
cmd_def_3: EITH
cmd_def_4: ALT
set_cmd: :TRIG:SLOP
group: Trigger
 
[Trig level]
datatype: DOUBLE
def_value: 0.0
unit: V
set_cmd: :TRIG:LEV
group: Trigger

[Ch1 - Enabled]
datatype: BOOLEAN
def_value: True
set_cmd: :CHAN1:DISP
group: Channel 1
section: Channels
[Ch1 - Range]
datatype: DOUBLE
def_value: 1.0
# low_lim: -10  this limit the lower settable value in the voltage range
# high_lim: 10  this limit the higher settable value in the voltage range
unit: V
set_cmd: :CHAN1:RANG
group: Channel 1
section: Channels
[Ch1 - Offset]
datatype: DOUBLE
def_value: 0.0
unit: V
set_cmd: :CHAN1:OFFS
group: Channel 1
section: Channels
[Ch1 - Coupling]
datatype: COMBO
def_value: DC
combo_def_1: AC
combo_def_2: DC
cmd_def_1: AC
cmd_def_2: DC
set_cmd: :CHAN1:COUP
group: Channel 1
section: Channels
[Ch1 - Limit bandwidth]
datatype: BOOLEAN
def_value: 0
set_cmd: :CHAN1:BWL
group: Channel 1
section: Channels
[Ch1 - Bandwidth]
datatype: COMBO
set_cmd: :CHAN1:BAND
combo_def_1: 25 MHz
#combo_def_2: 200 MHz
#combo_def_3: 1.5 GHz
#combo_def_4: 3 GHz
cmd_def_1: 25E6 
#cmd_def_2: 200E6
#cmd_def_3: 1.5E9
#cmd_def_4: 3E9
state_quant: Ch1 - Limit bandwidth
state_value: 1
group: Channel 1
section: Channels
#channel2
[Ch2 - Enabled]
datatype: BOOLEAN
def_value: True
set_cmd: :CHAN2:DISP
group: Channel 2
section: Channels
[Ch2 - Range]
datatype: DOUBLE
def_value: 1.0
unit: V
set_cmd: :CHAN2:RANG
group: Channel 2
section: Channels
[Ch2 - Offset]
datatype: DOUBLE
def_value: 0.0
unit: V
set_cmd: :CHAN2:OFFS
group: Channel 2
section: Channels
[Ch2 - Coupling]
datatype: COMBO
def_value: DC
combo_def_1: AC
combo_def_2: DC
cmd_def_1: AC
cmd_def_2: DC
set_cmd: :CHAN2:COUP
group: Channel 2
section: Channels
[Ch2 - Limit bandwidth]
datatype: BOOLEAN
def_value: 0
set_cmd: :CHAN2:BWL
group: Channel 2
section: Channels
[Ch2 - Bandwidth]
datatype: COMBO
set_cmd: :CHAN2:BAND
combo_def_1: 25 MHz
#combo_def_2: 200 MHz
#combo_def_3: 1.5 GHz
#combo_def_4: 3 GHz
cmd_def_1: 25E6 
#cmd_def_2: 200E6
#cmd_def_3: 1.5E9
#cmd_def_4: 3E9
state_quant: Ch2 - Limit bandwidth
state_value: 1
group: Channel 2
section: Channels
#channel3
[Ch3 - Enabled]
datatype: BOOLEAN
def_value: True
set_cmd: :CHAN3:DISP
group: Channel 3
section: Channels
[Ch3 - Range]
datatype: DOUBLE
def_value: 1.0
unit: V
set_cmd: :CHAN3:RANG
group: Channel 3
section: Channels
[Ch3 - Offset]
datatype: DOUBLE
def_value: 0.0
unit: V
set_cmd: :CHAN3:OFFS
group: Channel 3
section: Channels
[Ch3 - Coupling]
datatype: COMBO
def_value: DC
combo_def_1: AC
combo_def_2: DC
cmd_def_1: AC
cmd_def_2: DC
set_cmd: :CHAN3:COUP
group: Channel 3
section: Channels
[Ch3 - Limit bandwidth]
datatype: BOOLEAN
def_value: 0
set_cmd: :CHAN3:BWL
group: Channel 3
section: Channels
[Ch3 - Bandwidth]
datatype: COMBO
set_cmd: :CHAN3:BAND
combo_def_1: 25 MHz
#combo_def_2: 200 MHz
#combo_def_3: 1.5 GHz
#combo_def_4: 3 GHz
cmd_def_1: 25E6 
#cmd_def_2: 200E6
#cmd_def_3: 1.5E9
#cmd_def_4: 3E9
state_quant: Ch3 - Limit bandwidth
state_value: 1
group: Channel 3
section: Channels
