# Instrument driver configuration file.
[General settings]

# The name is shown in all the configuration windows
name: OMFT

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: OMFT

# Connection interface
interface: TCPIP 

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False

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
[Frequency]
datatype: DOUBLE
unit: THz
def_value: 190.7000
low_lim: 190.7000
high_lim: 196.6500
group: Laser

[Wavelength]
datatype: DOUBLE
unit: nm
def_value: 1572.063
low_lim: 1524.498
high_lim: 1572.063
group: Laser


[Offset]
datatype: DOUBLE
unit: GHz
def_value: 0
low_lim: -6
high_lim: 6
group: Laser

[Power]
datatype: DOUBLE
unit: dBm
def_value: 10.0
low_lim: 10.0
high_lim: 16.02
group: Laser

[Laser On/Off]
datatype: BOOLEAN
def_value: False
group: Laser
